<CompuCell3D Revision="20190430" Version="3.7.9">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>1000</Steps>
      <Temperature>1.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="1" TypeName="cell"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="BoundaryPixelTracker">
      
      <!-- Module tracking boundary pixels of each cell -->
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   <Steppable Type="BoxWatcher">
   
   <!-- Module tracing boundaries of the minimal box enclosing all the cells. May speed up calculations. May have no effect for parallel version -->
   <XMargin>5</XMargin>
   <YMargin>5</YMargin>
   <ZMargin>5</ZMargin>
</Steppable>

   
   <Plugin Name="Secretion">
      
      
   </Plugin>
   
   <Steppable Type="SteadyStateDiffusionSolver2D">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="substance">
         <ManageSecretionInPython/>
         <DiffusionData>
            <FieldName>substance</FieldName>
            <DiffusionConstant>10.0</DiffusionConstant>
            <DecayConstant>1e-100</DecayConstant>
         </DiffusionData>
         <SecretionData>
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
               
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
               
            </Plane>
            <Plane Axis="Z">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
               
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   <Steppable Type="BlobInitializer">
   
   <Region>
      <Center x="45" y="45" z="1"/>
      <Radius>10</Radius>
      <Gap>0</Gap>
      <Width>10</Width>
      <Types>cell</Types>
   </Region>
</Steppable>

</CompuCell3D>
