<CompuCell3D Revision="20190430" Version="3.7.9">
   
   <Potts>
      
      <!--- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>100</Steps>
      <Temperature>1</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="1" TypeName="source"/>
      <CellType TypeId="2" TypeName="cd4"/>
      <CellType TypeId="3" TypeName="th1"/>
      <CellType TypeId="4" TypeName="th2"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="source" LambdaVolume="2.0" TargetVolume="25"/>
      <VolumeEnergyParameters CellType="cd4" LambdaVolume="2.0" TargetVolume="25"/>
      <VolumeEnergyParameters CellType="th1" LambdaVolume="2.0" TargetVolume="25"/>
      <VolumeEnergyParameters CellType="th2" LambdaVolume="2.0" TargetVolume="25"/>
   </Plugin>
   
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="source" LambdaSurface="2.0" TargetSurface="25"/>
      <SurfaceEnergyParameters CellType="cd4" LambdaSurface="2.0" TargetSurface="25"/>
      <SurfaceEnergyParameters CellType="th1" LambdaSurface="2.0" TargetSurface="25"/>
      <SurfaceEnergyParameters CellType="th2" LambdaSurface="2.0" TargetSurface="25"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="ConnectivityGlobal">
      
      <!-- Connectivity constraint applied to each cell. Energy penalty specifies how strong the constraint is. Penalty is specified for each type  -->
      <!-- This constraint works in 2D and 3D on all type of lattices. It might be slowdown your simulation. For faster option - 2D and square lattice you may use Connectivity or ConnectivityLocalFlex -->
      <!-- To speed up simulation comment out unnecessary constraints for types which don't need the constraint -->
      <!-- By default we will always precheck connectivity BUT in simulations in which there is no risk of having unfragmented cell one can add this flag to speed up computations -->
      <!-- To turn off precheck uncomment line below -->
      <!-- <DoNotPrecheckConnectivity/> -->
      <Penalty Type="source">1000000</Penalty>
      <Penalty Type="cd4">1000000</Penalty>
      <Penalty Type="th1">1000000</Penalty>
      <Penalty Type="th2">1000000</Penalty>
   </Plugin>
   
   <Steppable Type="SteadyStateDiffusionSolver2D">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="INFg">
         <ManageSecretionInPython/>
         <DiffusionData>
            <FieldName>INFg</FieldName>
            <DiffusionConstant>100.0</DiffusionConstant>
            <DecayConstant>1e-05</DecayConstant>
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0"/>
               <ConstantValue PlanePosition="Max" Value="0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0"/>
               <ConstantValue PlanePosition="Max" Value="0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="il-4">
         <ManageSecretionInPython/>
         <DiffusionData>
            <FieldName>il-4</FieldName>
            <DiffusionConstant>100.0</DiffusionConstant>
            <DecayConstant>1e-05</DecayConstant>
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0"/>
               <ConstantValue PlanePosition="Max" Value="0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0"/>
               <ConstantValue PlanePosition="Max" Value="0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="il-2">
         <ManageSecretionInPython/>
         <DiffusionData>
            <FieldName>il-2</FieldName>
            <DiffusionConstant>100.0</DiffusionConstant>
            <DecayConstant>1e-05</DecayConstant>
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0"/>
               <ConstantValue PlanePosition="Max" Value="0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0"/>
               <ConstantValue PlanePosition="Max" Value="0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="BoxWatcher">
      
      <!-- Module tracing boundaries of the minimal box enclosing all the cells. May speed up calculations. May have no effect for parallel version -->
      <XMargin>5</XMargin>
      <YMargin>5</YMargin>
      <ZMargin>5</ZMargin>
   </Steppable>
   
   <Steppable Type="UniformInitializer">
      <Region>
         <BoxMin x="30" y="30" z="0"/>
         <BoxMax x="70" y="70" z="1"/>
         <Gap>5</Gap>
         <Width>2</Width>
         <Types>cd4</Types>
      </Region>
<!--             <Region> -->
<!--                  <BoxMin x="45" y="45" z="0"/> -->
<!--                  <BoxMax x="55" y="55" z="1"/> -->
<!--                  <Gap>0</Gap> -->
<!--                  <Width>10</Width> -->
<!--                  <Types>cd4</Types> -->
<!--             </Region> -->
   </Steppable>
   <Steppable Type="BlobInitializer">
   <Region>
      <Center x="50" y="0" z="0"/>
      <Radius>2</Radius>
      <Gap>0</Gap>
      <Width>2</Width>
      <Types>source</Types>
   </Region>
</Steppable>

</CompuCell3D>
